PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s' % (expName, data.getDateStr())
  Experiment info = {}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Save psydat file = False
  Save wide csv file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1280, 720]
  color = [-0.86, -0.84, -0.78]
  expName = stroop_go_nogo_ptbr
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine boas_vindas
    RoutineSettingsComponent boas_vindas
      color = $[-0.86, -0.84, -0.78]
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    TextComponent boas_vindas_title
      height = 0.062
      letterHeight = 0.062
      pos = [0, 0.18]
      startVal [time (s)] = 0
      text = Teste de Atenção e Inibição
      wrapWidth = 1.25
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    TextComponent boas_vindas_body
      color = lightgray
      height = 0.036
      letterHeight = 0.036
      pos = [0, 0.02]
      startVal [time (s)] = 0
      text = Uma tarefa breve para medir velocidade e controle de resposta.
      wrapWidth = 1.18
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    TextComponent boas_vindas_key
      color = lightblue
      height = 0.034
      letterHeight = 0.034
      pos = [0, -0.31]
      startVal [time (s)] = 0
      text = [ ESPAÇO ]
      wrapWidth = 0.7
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    TextComponent boas_vindas_hint
      color = lightgray
      height = 0.026
      letterHeight = 0.026
      pos = [0, -0.37]
      startVal [time (s)] = 0
      text = Pressione ESPAÇO para continuar
      wrapWidth = 1.0
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    KeyboardComponent tecla_boas_vindas
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    CodeComponent formulario_sessao
      Code Type = Auto->JS
      Begin Experiment:
        from psychopy import gui, core
        from datetime import datetime
        import csv
        import os
        import re
        import uuid

        TEST_CODE = 'stroop_go_nogo_ptbr'
        TEST_VERSION = '0.1.0'
        PARTICIPANT_ID_PATTERN = re.compile(r'^[A-Za-z0-9_-]{2,64}$')
        OFFICIAL_CSV_COLUMNS = [
            'project',
            'participant_id',
            'initials',
            'visit',
            'evaluator',
            'assessment_id',
            'assessment_date',
            'started_at',
            'test_code',
            'test_version',
            'block',
            'trial_number',
            'word',
            'ink_color',
            'condition',
            'correct_response',
            'key_pressed',
            'reaction_time',
            'correct',
            'error_type',
        ]
        CONDITION_MAP = {
            'congruente': 'congruent',
            'incongruente': 'incongruent',
            'congruent': 'congruent',
            'incongruent': 'incongruent',
        }

        _session_values = {
            'project': '',
            'participant_id': '',
            'initials': '',
            'visit': '',
            'evaluator': '',
        }
        _session_error = ''

        while True:
            session_dlg = gui.Dlg(
                title='Dados da sessão',
                labelButtonOK='Iniciar tarefa',
                labelButtonCancel='Cancelar',
            )
            session_dlg.addText('Preencha os dados da execução.')
            session_dlg.addText('A data e a hora da avaliação são registradas automaticamente.')
            if _session_error:
                session_dlg.addText(_session_error, color='red')
            session_dlg.addField('Projeto', _session_values['project'])
            session_dlg.addField('ID do participante', _session_values['participant_id'])
            session_dlg.addField('Iniciais (opcional)', _session_values['initials'])
            session_dlg.addField('Visita', _session_values['visit'])
            session_dlg.addField('Avaliador(a)', _session_values['evaluator'])
            dlg_values = session_dlg.show()

            if not session_dlg.OK:
                core.quit()

            keys = ['project', 'participant_id', 'initials', 'visit', 'evaluator']
            labels = ['Projeto', 'ID do participante', 'Iniciais (opcional)', 'Visita', 'Avaliador(a)']
            if isinstance(dlg_values, dict):
                raw_values = {key: dlg_values.get(label, '') for key, label in zip(keys, labels)}
            else:
                if dlg_values is None:
                    dlg_values = getattr(session_dlg, 'data', [])
                raw_values = {key: value for key, value in zip(keys, dlg_values)}
            _session_values = {key: str(raw_values.get(key, '')).strip() for key in keys}
            validation_errors = []

            if not _session_values['project']:
                validation_errors.append('Informe o projeto.')
            if not _session_values['participant_id']:
                validation_errors.append('Informe o ID do participante.')
            elif not PARTICIPANT_ID_PATTERN.match(_session_values['participant_id']):
                validation_errors.append('ID do participante: use 2 a 64 caracteres, apenas letras, números, hífen e sublinhado.')
            if not _session_values['visit']:
                validation_errors.append('Informe a visita.')
            if not _session_values['evaluator']:
                validation_errors.append('Informe o avaliador(a).')

            if not validation_errors:
                break

            _session_error = 'Corrija os campos: ' + ' '.join(validation_errors)

        _started_at = datetime.now().astimezone().replace(microsecond=0)
        expInfo.clear()
        expInfo.update(_session_values)
        expInfo['assessment_id'] = str(uuid.uuid4())
        expInfo['assessment_date'] = _started_at.date().isoformat()
        expInfo['started_at'] = _started_at.isoformat()
        expInfo['test_code'] = TEST_CODE
        expInfo['test_version'] = TEST_VERSION

        _official_timestamp = _started_at.strftime('%Y-%m-%d_%Hh%Mm%Ss')
        official_csv_path = os.path.join('data', f'{TEST_CODE}_{_official_timestamp}_trials.csv')
        official_trial_rows = []
        official_csv_state = {'written': False}


        def _canonical_text(value):
            if value in [None, 'None']:
                return ''
            return str(value).strip()


        def create_trial_context(block_value, trial_number_value, word_value, ink_color_value, condition_value, correct_response_value):
            try:
                trial_index = int(trial_number_value)
            except Exception as exc:
                raise RuntimeError('trial_number invalido para exportacao oficial.') from exc
            if trial_index < 1:
                raise RuntimeError('trial_number deve ser positivo para exportacao oficial.')

            source_condition = _canonical_text(condition_value).lower()
            canonical_condition = CONDITION_MAP.get(source_condition)
            if canonical_condition is None:
                raise RuntimeError(f'condition invalida para exportacao oficial: {condition_value}')

            expected_response = 'space' if canonical_condition == 'congruent' else ''
            source_response = _canonical_text(correct_response_value)
            if source_response != expected_response:
                raise RuntimeError('correct_response incompativel com condition na tentativa atual.')

            return {
                'block': block_value,
                'trial_number': trial_index,
                'word': _canonical_text(word_value),
                'ink_color': _canonical_text(ink_color_value),
                'condition': canonical_condition,
                'correct_response': expected_response,
            }


        def _extract_keyboard_response(keyboard_component):
            key_pressed_value = ''
            reaction_time_value = ''
            if keyboard_component.keys not in [None, '', []]:
                key_pressed_value = keyboard_component.keys[0] if isinstance(keyboard_component.keys, list) else keyboard_component.keys
                key_pressed_value = _canonical_text(key_pressed_value)
                if key_pressed_value != 'space':
                    raise RuntimeError(f'key_pressed invalido para exportacao oficial: {key_pressed_value}')
                if keyboard_component.rt in [None, '', []]:
                    raise RuntimeError('reaction_time ausente apesar de haver resposta.')
                reaction_time_raw = keyboard_component.rt[0] if isinstance(keyboard_component.rt, list) else keyboard_component.rt
                reaction_time_float = float(reaction_time_raw)
                if reaction_time_float <= 0:
                    raise RuntimeError('reaction_time deve ser maior que zero quando ha resposta.')
                reaction_time_value = f'{reaction_time_float:.6f}'.rstrip('0').rstrip('.')
            return key_pressed_value, reaction_time_value


        def build_trial_record(trial_context, keyboard_component):
            key_pressed_value, reaction_time_value = _extract_keyboard_response(keyboard_component)
            condition_value = trial_context['condition']

            if condition_value == 'congruent' and key_pressed_value == 'space':
                correct_value = '1'
                error_type_value = 'hit'
            elif condition_value == 'congruent':
                correct_value = '0'
                error_type_value = 'omission'
            elif key_pressed_value == 'space':
                correct_value = '0'
                error_type_value = 'commission'
            else:
                correct_value = '1'
                error_type_value = 'correct_rejection'

            row = {
                'project': expInfo['project'],
                'participant_id': expInfo['participant_id'],
                'initials': expInfo['initials'],
                'visit': expInfo['visit'],
                'evaluator': expInfo['evaluator'],
                'assessment_id': expInfo['assessment_id'],
                'assessment_date': expInfo['assessment_date'],
                'started_at': expInfo['started_at'],
                'test_code': expInfo['test_code'],
                'test_version': expInfo['test_version'],
                'block': trial_context['block'],
                'trial_number': str(trial_context['trial_number']),
                'word': trial_context['word'],
                'ink_color': trial_context['ink_color'],
                'condition': condition_value,
                'correct_response': trial_context['correct_response'],
                'key_pressed': key_pressed_value,
                'reaction_time': reaction_time_value,
                'correct': correct_value,
                'error_type': error_type_value,
            }
            validate_official_trial_row(row)
            return row


        def validate_official_trial_row(row):
            if list(row.keys()) != OFFICIAL_CSV_COLUMNS:
                raise RuntimeError('Colunas oficiais fora da ordem esperada.')
            if row['block'] not in ['practice', 'main']:
                raise RuntimeError('block invalido na exportacao oficial.')
            if row['condition'] not in ['congruent', 'incongruent']:
                raise RuntimeError('condition invalida na exportacao oficial.')
            if row['correct_response'] not in ['', 'space']:
                raise RuntimeError('correct_response invalido na exportacao oficial.')
            if row['key_pressed'] not in ['', 'space']:
                raise RuntimeError('key_pressed invalido na exportacao oficial.')
            if row['correct'] not in ['0', '1']:
                raise RuntimeError('correct invalido na exportacao oficial.')
            if row['error_type'] not in ['hit', 'omission', 'correct_rejection', 'commission']:
                raise RuntimeError('error_type invalido na exportacao oficial.')
            expected_response = 'space' if row['condition'] == 'congruent' else ''
            if row['correct_response'] != expected_response:
                raise RuntimeError('correct_response incoerente com condition.')
            if row['key_pressed'] == 'space' and not row['reaction_time']:
                raise RuntimeError('reaction_time ausente em resposta com Espaco.')
            if row['key_pressed'] == '' and row['reaction_time'] != '':
                raise RuntimeError('reaction_time deve ficar vazio quando nao ha resposta.')
            expected = {
                ('congruent', 'space'): ('1', 'hit'),
                ('congruent', ''): ('0', 'omission'),
                ('incongruent', ''): ('1', 'correct_rejection'),
                ('incongruent', 'space'): ('0', 'commission'),
            }[(row['condition'], row['key_pressed'])]
            if (row['correct'], row['error_type']) != expected:
                raise RuntimeError('correct/error_type incoerentes com condition e key_pressed.')


        def write_official_csv():
            if official_csv_state['written']:
                return
            if not official_trial_rows:
                raise RuntimeError('Nenhuma tentativa registrada para o CSV oficial.')
            os.makedirs('data', exist_ok=True)
            with open(official_csv_path, 'w', newline='', encoding='utf-8') as file_obj:
                writer = csv.DictWriter(file_obj, fieldnames=OFFICIAL_CSV_COLUMNS, extrasaction='raise')
                writer.writeheader()
                for row in official_trial_rows:
                    validate_official_trial_row(row)
                    writer.writerow(row)
            official_csv_state['written'] = True
  Routine instr_regra
    RoutineSettingsComponent instr_regra
      color = $[-0.86, -0.84, -0.78]
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    TextComponent instr_regra_title
      height = 0.062
      letterHeight = 0.062
      pos = [0, 0.18]
      startVal [time (s)] = 0
      text = Regra principal
      wrapWidth = 1.25
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    TextComponent instr_regra_body
      color = lightgray
      height = 0.036
      letterHeight = 0.036
      pos = [0, 0.02]
      startVal [time (s)] = 0
      wrapWidth = 1.18
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      text:
        Pressione ESPAÇO quando a palavra estiver escrita na cor correspondente.
        Não pressione nada quando a palavra estiver escrita em outra cor.
    TextComponent instr_regra_key
      color = lightblue
      height = 0.034
      letterHeight = 0.034
      pos = [0, -0.31]
      startVal [time (s)] = 0
      text = [ ESPAÇO ]
      wrapWidth = 0.7
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    TextComponent instr_regra_hint
      color = lightgray
      height = 0.026
      letterHeight = 0.026
      pos = [0, -0.37]
      startVal [time (s)] = 0
      text = Pressione ESPAÇO para continuar
      wrapWidth = 1.0
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    KeyboardComponent tecla_instr_regra
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine instr_congruente
    RoutineSettingsComponent instr_congruente
      color = $[-0.86, -0.84, -0.78]
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    TextComponent instr_congruente_title
      height = 0.062
      letterHeight = 0.062
      pos = [0, 0.18]
      startVal [time (s)] = 0
      text = Quando combinar, responda
      wrapWidth = 1.25
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    TextComponent instr_congruente_body
      color = lightgray
      height = 0.036
      letterHeight = 0.036
      pos = [0, 0.02]
      startVal [time (s)] = 0
      wrapWidth = 1.18
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      text:
        Exemplo: a palavra abaixo combina com a cor.
        Pressione ESPAÇO.
    TextComponent exemplo_congruente_word
      color = [-1, 1, -1]
      height = 0.095
      letterHeight = 0.095
      pos = [0, -0.09]
      startVal [time (s)] = 0
      text = VERDE
      wrapWidth = 1.0
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    TextComponent instr_congruente_key
      color = lightblue
      height = 0.034
      letterHeight = 0.034
      pos = [0, -0.31]
      startVal [time (s)] = 0
      text = [ ESPAÇO ]
      wrapWidth = 0.7
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    TextComponent instr_congruente_hint
      color = lightgray
      height = 0.026
      letterHeight = 0.026
      pos = [0, -0.37]
      startVal [time (s)] = 0
      text = Pressione ESPAÇO para continuar
      wrapWidth = 1.0
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    KeyboardComponent tecla_instr_congruente
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine instr_incongruente
    RoutineSettingsComponent instr_incongruente
      color = $[-0.86, -0.84, -0.78]
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    TextComponent instr_incongruente_title
      height = 0.062
      letterHeight = 0.062
      pos = [0, 0.18]
      startVal [time (s)] = 0
      text = Quando não combinar, iniba
      wrapWidth = 1.25
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    TextComponent instr_incongruente_body
      color = lightgray
      height = 0.036
      letterHeight = 0.036
      pos = [0, 0.02]
      startVal [time (s)] = 0
      wrapWidth = 1.18
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      text:
        Exemplo: a palavra abaixo não combina com a cor.
        Não pressione nenhuma tecla.
    TextComponent exemplo_incongruente_word
      color = [-1, -1, 1]
      height = 0.095
      letterHeight = 0.095
      pos = [0, -0.09]
      startVal [time (s)] = 0
      text = VERMELHO
      wrapWidth = 1.0
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    TextComponent instr_incongruente_key
      color = lightblue
      height = 0.034
      letterHeight = 0.034
      pos = [0, -0.31]
      startVal [time (s)] = 0
      text = [ ESPAÇO ]
      wrapWidth = 0.7
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    TextComponent instr_incongruente_hint
      color = lightgray
      height = 0.026
      letterHeight = 0.026
      pos = [0, -0.37]
      startVal [time (s)] = 0
      text = Pressione ESPAÇO para continuar
      wrapWidth = 1.0
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    KeyboardComponent tecla_instr_incongruente
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine contagem
    RoutineSettingsComponent contagem
      color = $[-0.86, -0.84, -0.78]
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    TextComponent contagem_texto
      height = 0.09
      letterHeight = 0.09
      pos = [0, 0.02]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.55
      text [set every repeat] = $countdown_text
      wrapWidth = 1.0
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    TextComponent contagem_hint
      color = lightgray
      height = 0.03
      letterHeight = 0.03
      pos = [0, -0.18]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.55
      text = ESPAÇO apenas quando combinar
      wrapWidth = 1.0
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  Routine trial_pratica
    RoutineSettingsComponent trial_pratica
      color = $[-0.86, -0.84, -0.78]
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    CodeComponent codigo_pratica
      Code Type = Auto->JS
      Before Experiment:
        from psychopy import event, core
        trial_clock = core.Clock()
      Begin Routine:
        event.clearEvents(eventType='keyboard')
        key_pressed = ''
        reaction_time = ''
        correct = 0
        error_type = ''
        feedback_text = ''
        block = 'practice'
        _current_trial_context = create_trial_context(
            block,
            pratica_loop.thisN + 1,
            word,
            ink_color,
            condition,
            correct_response,
        )
      End Routine:
        trial_record = build_trial_record(_current_trial_context, resp_pratica)
        key_pressed = trial_record['key_pressed']
        reaction_time = trial_record['reaction_time']
        correct = int(trial_record['correct'])
        error_type = trial_record['error_type']
        if error_type in ['hit', 'correct_rejection']:
            feedback_text = '✓ Correto'
        elif error_type == 'omission':
            feedback_text = 'Pressione ESPAÇO quando a cor combina'
        else:
            feedback_text = 'Não responda quando a cor não combina'
        official_trial_rows.append(trial_record)
    KeyboardComponent resp_pratica
      allowedKeys = 'space'
      correctAns [set every repeat] = $correct_response
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      store = first key
      storeCorrect = True
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    TextComponent fix_pratica
      color = lightgray
      height = 0.06
      letterHeight = 0.06
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.4
      text = +
      wrapWidth = 0.4
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    TextComponent stim_pratica
      color [set every repeat] = $ink_color
      height = 0.12
      letterHeight = 0.12
      pos = [0, 0.02]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $word
      wrapWidth = 1.0
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    TextComponent lembrete_pratica
      color = lightgray
      height = 0.028
      letterHeight = 0.028
      pos = [0, -0.20]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      text = ESPAÇO apenas quando combinar
      wrapWidth = 1.0
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    TextComponent hold_pratica
      color = [-0.86, -0.84, -0.78]
      height = 0.001
      letterHeight = 0.001
      pos = [0, -0.45]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.3
      text = .
      wrapWidth = 0.1
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  Routine feedback_pratica
    RoutineSettingsComponent feedback_pratica
      color = $[-0.86, -0.84, -0.78]
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    TextComponent texto_feedback
      height = 0.052
      letterHeight = 0.052
      pos = [0, 0.02]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $feedback_text
      wrapWidth = 1.15
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  Routine resumo_pratica
    RoutineSettingsComponent resumo_pratica
      color = $[-0.86, -0.84, -0.78]
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    TextComponent resumo_pratica_title
      height = 0.062
      letterHeight = 0.062
      pos = [0, 0.18]
      startVal [time (s)] = 0
      text = Prática concluída
      wrapWidth = 1.25
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    TextComponent resumo_pratica_body
      color = lightgray
      height = 0.036
      letterHeight = 0.036
      pos = [0, 0.02]
      startVal [time (s)] = 0
      wrapWidth = 1.18
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      text:
        Agora começa a tarefa principal.
        A regra continua a mesma e não havera feedback.
    TextComponent resumo_pratica_key
      color = lightblue
      height = 0.034
      letterHeight = 0.034
      pos = [0, -0.31]
      startVal [time (s)] = 0
      text = [ ESPAÇO ]
      wrapWidth = 0.7
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    TextComponent resumo_pratica_hint
      color = lightgray
      height = 0.026
      letterHeight = 0.026
      pos = [0, -0.37]
      startVal [time (s)] = 0
      text = Pressione ESPAÇO para continuar
      wrapWidth = 1.0
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    KeyboardComponent tecla_resumo_pratica
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine trial_principal
    RoutineSettingsComponent trial_principal
      color = $[-0.86, -0.84, -0.78]
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    CodeComponent codigo_principal
      Code Type = Auto->JS
      Begin Routine:
        event.clearEvents(eventType='keyboard')
        key_pressed = ''
        reaction_time = ''
        correct = 0
        error_type = ''
        block = 'main'
        try:
            total_main_trials = len(principal_loop.trialList)
            current_main_trial = principal_loop.thisN + 1
        except Exception:
            total_main_trials = '?'
            current_main_trial = '?'
        progress_text = f'Bloco principal - tentativa {current_main_trial} de {total_main_trials}'
        _current_trial_context = create_trial_context(
            block,
            current_main_trial,
            word,
            ink_color,
            condition,
            correct_response,
        )
      End Routine:
        trial_record = build_trial_record(_current_trial_context, resp_principal)
        key_pressed = trial_record['key_pressed']
        reaction_time = trial_record['reaction_time']
        correct = int(trial_record['correct'])
        error_type = trial_record['error_type']
        official_trial_rows.append(trial_record)
    KeyboardComponent resp_principal
      allowedKeys = 'space'
      correctAns [set every repeat] = $correct_response
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      store = first key
      storeCorrect = True
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    TextComponent progresso_principal
      color = lightgray
      height = 0.026
      letterHeight = 0.026
      pos = [0, 0.35]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.3
      text [set every repeat] = $progress_text
      wrapWidth = 1.2
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    TextComponent fix_principal
      color = lightgray
      height = 0.06
      letterHeight = 0.06
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.4
      text = +
      wrapWidth = 0.4
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    TextComponent stim_principal
      color [set every repeat] = $ink_color
      height = 0.12
      letterHeight = 0.12
      pos = [0, 0.02]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $word
      wrapWidth = 1.0
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    TextComponent lembrete_principal
      color = lightgray
      height = 0.028
      letterHeight = 0.028
      pos = [0, -0.20]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      text = ESPAÇO apenas quando combinar
      wrapWidth = 1.0
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    TextComponent hold_principal
      color = [-0.86, -0.84, -0.78]
      height = 0.001
      letterHeight = 0.001
      pos = [0, -0.45]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.3
      text = .
      wrapWidth = 0.1
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  Routine fim
    RoutineSettingsComponent fim
      color = $[-0.86, -0.84, -0.78]
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    TextComponent fim_title
      height = 0.062
      letterHeight = 0.062
      pos = [0, 0.18]
      startVal [time (s)] = 0
      text = Teste concluído.
      wrapWidth = 1.25
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    TextComponent fim_body
      color = lightgray
      height = 0.036
      letterHeight = 0.036
      pos = [0, 0.02]
      startVal [time (s)] = 0
      text = Obrigado pela participação.
      wrapWidth = 1.18
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    TextComponent fim_key
      color = lightblue
      height = 0.034
      letterHeight = 0.034
      pos = [0, -0.31]
      startVal [time (s)] = 0
      text = [ ESPAÇO ]
      wrapWidth = 0.7
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    TextComponent fim_hint
      color = lightgray
      height = 0.026
      letterHeight = 0.026
      pos = [0, -0.37]
      startVal [time (s)] = 0
      text = Pressione ESPAÇO para continuar
      wrapWidth = 1.0
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    KeyboardComponent tecla_fim
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    CodeComponent salvar_csv_unificado
      Code Type = Auto->JS
      End Routine:
        write_official_csv()
Flow
  Routine boas_vindas
  Routine instr_regra
  Routine instr_congruente
  Routine instr_incongruente
  LoopInitiator contagem_pratica_loop loopType="TrialHandler"
    conditions = condicoes/contagem_regressiva.csv
    conditionsFile = condicoes/contagem_regressiva.csv
    isTrials = False
    loopType = sequential
    method = sequential
    nReps = 1
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    Routine contagem
  LoopTerminator contagem_pratica_loop
  LoopInitiator pratica_loop loopType="TrialHandler"
    conditions = condicoes/pratica_stroop_go_nogo_ptbr.csv
    conditionsFile = condicoes/pratica_stroop_go_nogo_ptbr.csv
    isTrials = False
    loopType = random
    method = random
    nReps = 1
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    Routine trial_pratica
    Routine feedback_pratica
  LoopTerminator pratica_loop
  Routine resumo_pratica
  LoopInitiator contagem_principal_loop loopType="TrialHandler"
    conditions = condicoes/contagem_regressiva.csv
    conditionsFile = condicoes/contagem_regressiva.csv
    isTrials = False
    loopType = sequential
    method = sequential
    nReps = 1
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    Routine contagem
  LoopTerminator contagem_principal_loop
  LoopInitiator principal_loop loopType="TrialHandler"
    conditions = condicoes/bloco_principal_stroop_go_nogo_ptbr.csv
    conditionsFile = condicoes/bloco_principal_stroop_go_nogo_ptbr.csv
    isTrials = False
    loopType = random
    method = random
    nReps = 1
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    Routine trial_principal
  LoopTerminator principal_loop
  Routine fim
